config:
  title: diagnostic_rt_qpcr
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.2
sample_types:
  - {name: Master Mix, description: Master Mix sample type TODO Make better description}
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object_types:
  - {name: 96-well qPCR Plate, description: 96-well qPCR Reaction, handler: collection, unit: qPCR Reaction, release_method: return, rows: 8, columns: 12, sample_type_name: qPCR Reaction}
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operation_type: Add No Template Control
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: PCR Plate, sample_types: [Master Mix], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [Master Mix], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: json, role: input, name: Options}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Microtiter Plates/PlateLayoutGenerator'
needs 'PCR Libs/PCRComposition'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Protocol for setting up a master mix plate for RT-qPCR
# @note Instructions adapted from the CDC COVID-19 detection protocol
#   https://www.fda.gov/media/134922/download
#
# 12) Prior to moving to the nucleic acid handling area, prepare the
#   No Template Control (NTC) reactions for column #1 in the
#   assay preparation area.
#
# 13) Pipette 5 uL of nuclease-free water into the NTC sample wells
#   (Figure 2, column 1). Securely cap NTC wells before proceeding.
#
# 14) Cover the entire reaction plate and move the reaction plate to
#   the specimen nucleic acid handling area.
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  # Standard Libs
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay

  # Diagnostic RT-qPCR
  include DataAssociationKeys

  WATER = 'Molecular Grade Water'
  RNA_FREE_WORKSPACE = 'reagent set-up room'
  PLATE = 'PCR Plate'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      program_name: 'CDC_TaqPath_CG',
      sample_group_size: 3
    }
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    operations.retrieve.make

    add_no_template_controls(operations: operations)

    operations.store

    {}
  end

  # Group_Size and Program name are attributes of the plate
  # and should be associated to the plate from Prepare Master Mix
  def add_no_template_controls(operations:)
    operations.each do |op|
      group_size = op.input(PLATE).collection.get(GROUP_SIZE_KEY)
      program_name = op.input(PLATE).collection.get(COMPOSITION_NAME_KEY)

      if debug
        group_size = 3
        program_name = 'CDC_TaqPath_CG'
      end

      layout_generator = PlateLayoutGeneratorFactory.build(
        group_size: group_size # op.temporary[:options][:sample_group_size]
      )
      layout_group = layout_generator.next_group
      composition = PCRCompositionFactory.build(
        program_name: program_name # op.temporary[:options][:program_name]
      )
      volume = composition.water.qty_display
      collection = op.output(PLATE).collection

      show do
        title "Pipet No Template Control (NTC) samples into plate #{collection}"

        note "Pipet #{volume} of #{WATER} into the indicated wells of" \
          " plate #{collection}"
        table highlight_collection_rc(collection, layout_group, check: true)
      end
    end
  end

end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    ops = add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: RNA, description: A sample of RNA}
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object_types:
  - {name: Lyophilized RNA, description: Lyophilized RNA, handler: sample_container, unit: RNA, release_method: return, sample_type_name: RNA}
  - {name: Purified RNA in 1.5 mL tube, description: Purified RNA in 1.5 mL tube, handler: sample_container, unit: RNA, release_method: return, prefix: M80, sample_type_name: RNA}
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operation_type: Aliquot Positive Template
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [RNA], object_types: [Lyophilized RNA], routing: T}
  - {ftype: sample, role: output, name: Template, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], routing: T}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/PrepareRTqPCRValidation'
needs 'Diagnostic RT-qPCR/PrepareqPCRPlateHelper'

# Protocol for setting up a plate with extracted RNA samples
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
class Protocol
  include PrepareqPCRPlateHelper
  include PrepareRTqPCRValidation

  def default_job_params
    {
      primer_set: 'RP_N2',
      max_inputs: 24,
      group_size: 3,
      method: 'sample_layout'.to_sym, 
      additional_inputs: [
        # {
        #   name: nil,
        #   container: nil,
        #   station: 'bench'
        #   volume{
        #       qty: nil,
        #       units: MIROLITERS
        # }
      ],
      negative_controls: {
        name: 'NTC',
        first_well: [0, 0],
        station: 'negative_control station',
        volume: {
          qty: 5,
          units: MICROLITERS
        },
        additional_inputs: [
          # {
          #   name: nil,
          #   container: nil,
          #   station: nil,
          #   volume{
          #        qty: nil,
          #        units: MIROLITERS
          #   }
          # }
        ]
      },
      positive_controls:{
        name: 'nCoVPC',
        first_well: [0, 11],
        station: 'positive control station',
        volume: {
          qty: 5,
          units: MICROLITERS
        },
        additional_inputs: [
          # {
          #   name: nil,
          #   container: nil,
          #   station: nil,
          #   volume{
          #        qty: nil,
          #        units: MIROLITERS
          #   }
          # }
        ]
      },
      standard_samples: {
        station: 'sample handling station',
        volume: {
          qty: 5,
          units: MICROLITERS
        },
        additional_inputs: [
          # {
          #   name: nil,
          #   container: nil,
          #   station: nil,
          #   volume{
          #        qty: nil,
          #        units: MIROLITERS
          #   }
          # }
        ]
      }
    }
  end

  def default_operation_params
    {}
  end

  def main
    operations.reject!{ |op| validate(operations: operations).include?(op) }
    return {} if operations.empty?

    operations.retrieve

    operations.each do |op|
      run_job(default_job_params: default_job_params,
              default_operation_params: default_operation_params,
              op: op)
    end

    operations.store

    {}

  end
end

sample_types:
  - {name: Primer/Probe Mix, description: Primer/Probe Mix for qPCR}
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object_types:
  - {name: Lyophilized Primer Mix, description: Lyophilized Primer Mix, handler: sample_container, unit: Primer Mix, release_method: return, sample_type_name: Primer/Probe Mix}
  - {name: Primer Mix Aliquot, description: Primer Mix Aliquot, handler: sample_container, unit: Primer Mix, release_method: return, prefix: M20, sample_type_name: Primer/Probe Mix}
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operation_type: Aliquot Primer/Probe
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Lyophilized Primer Mix], routing: P}
  - {ftype: sample, role: output, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Primer Mix Aliquot], routing: P}
  - {ftype: json, role: input, name: Options}
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protocol:
# Aliquot Primer Probe
# Written By Dany Fu 2020-05-05

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'

# 1) Upon receipt, store dried primers and probes at 2-8C.
# 2) Precautions: These reagents should only be handled in a clean area and
# stored at appropriate temperatures (see below) in the dark. Freeze-thaw cycles
# should be avoided. Maintain cold when thawed.
# 3) Using aseptic technique, suspend dried reagents in 1.5 mL of nuclease-free
# water (50X working concentration) and allow to rehydrate for 15 min at room
# temperature in the dark.
# 4) Mix gently and aliquot primers/probe in 300 uL volumes into 5 pre-labeled
# tubes. Store a single aliquot of primers/probe at 2-8oC in the dark. Do not
# refreeze (stable for up to 4 months). Store remaining aliquots at <= -20oC
# in a non-frost-free freezer.
class Protocol
  include DiagnosticRTqPCRHelper

  OUTPUT_ITEMS_NUM = { qty: 5, units: TUBE_MICROFUGE }.freeze
  TIME_REHYDRATE = { qty: 15, units: MINUTES }.freeze
  VOL_WATER = { qty: 1.5, units: MILLILITERS }.freeze
  VOL_SUSPENSION = { qty: 300, units: MICROLITERS }.freeze

  COLD_ROOM = 'M4'.freeze

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    get_tubes(count: operations.length)
    operations.retrieve

    save_output(operations)
    suspend_primer_mix

    # Group the operations by the input reagent
    ops_by_input = operations.group_by { |op| op.input(PRIMER_MIX).item }
    ops_by_input.each do |primer, ops|
      make_aliquots(ops: ops, primer: primer)
    end

    operations.store(interactive: true, io: 'output', method: 'boxes')
  end

  # Get 5 1.5 mL tubes per dried reagent
  # @param count [Integer] the number of operations currently running
  def get_tubes(count:)
    show do
      title "Get new #{TUBE_MICROFUGE}"
      check "Please get #{count * OUTPUT_ITEMS_NUM[:qty]} #{TUBE_MICROFUGE}"
    end
  end

  # Create and save multiple output Items per operation
  # @param operations [OperationList] List of operations
  def save_output(operations)
    operations.make

    operations.each do |op|
      op.output(PRIMER_MIX).item.associate :volume, VOL_SUSPENSION[:qty]

      output_primer = op.output(PRIMER_MIX).sample
      # makes 4 additional aliquots per op
      (OUTPUT_ITEMS_NUM[:qty] - 1).times do
        new_aliquot = output_primer.make_item('Primer Mix Aliquot')
        new_aliquot.associate :volume, VOL_SUSPENSION[:qty]
        link_output_item(operation: op, sample: output_primer, item: new_aliquot)
      end
    end
  end

  # Manually link the item to the operation as an output
  # @param op [Operation] the operation that creates the items
  # @param sample [Sample] the sample of the item
  # @param item [Item] the item that is created
  def link_output_item(operation:, sample:, item:)
    fv = FieldValue.new(
      name: PRIMER_MIX,
      child_item_id: item.id,
      child_sample_id: sample.id,
      role: 'output',
      parent_class: 'Operation',
      parent_id: operation.id,
      field_type_id: operation.output(PRIMER_MIX).field_type.id
    )
    fv.save
  end

  # Instructions for suspending dried reagents
  def suspend_primer_mix
    show do
      title 'Suspend Primer Mix'
      warning 'These reagents should only be handled in a clean area.'
      warning 'Avoid reeze-thaw cycles. Maintain on ice when thawed.'
      check "Using aseptic technique, suspend each dried primer in \
             #{qty_display(VOL_WATER)} of nuclease-free water."
      check "Rehydrate for #{qty_display(TIME_REHYDRATE)} at room temperature \
            in the dark."
      timer initial: { minutes: TIME_REHYDRATE[:qty] }
    end
  end

  # Make 5 aliquots for each primer
  # @param operations [OperationList] Array of operations grouped by primer
  def make_aliquots(ops:, primer:)
    last_tube_id = '' # keep one of each primer
    ops.each do |op|
      input_primers = Array.new(OUTPUT_ITEMS_NUM[:qty], primer.id)
      aliquot_tubes = op.outputs.map { |output| output.item.id }
      transfer_table = Table.new
                            .add_column('Primer Mix ID', input_primers)
                            .add_column('Destination Tube ID', aliquot_tubes)

      show do
        title 'Make Aliquots'
        check 'Label destination tube IDs according to the table.'
        check "Mix solution gently and aliquot #{qty_display(VOL_SUSPENSION)} \
              of rehydrated primer into each tube according to the table."
        table transfer_table
      end

      primer.mark_as_deleted # discard the input
      last_tube_id = aliquot_tubes[-1]
    end

    # One aliquot of each primer mix should be stored in the cold room instead
    # of freezer. However, this code doesn't actually work as one ObjectType
    # can only be associated with one location.
    # Leaving this here for completeness.
    last_tube = Item.find(last_tube_id)
    last_tube.move(COLD_ROOM)
    last_tube.store
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: Respiratory Specimen, description: Incoming sample for testing}
    - {name: Tracking ID, ftype: string, required: true}
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object_types:
  - {name: Patient Swab, description: Nasopharyngeal Swab, handler: sample_container, unit: each, release_method: return, prefix: M80, sample_type_name: Respiratory Specimen}
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operation_type: Extract RNA
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, sample_types: [Respiratory Specimen], object_types: [Patient Swab], routing: S}
  - {ftype: sample, role: output, name: Specimen, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], routing: T}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/RNAExtractionHelper'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include RNAExtractionHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: QiagenRNeasyMiniKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = operations.map { |op| sample_volume(op) }
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        use_operations: true
      )
    end

    operations.store

    {}
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

object_types:
  - {name: 96 deepwell plate, description: 96 deepwell plate, handler: collection, unit: each, release_method: return, rows: 8, columns: 12}
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operation_type: Extract RNA HTP
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, object_types: [96 deepwell plate], routing: S}
  - {ftype: sample, role: output, name: Specimen, routing: T}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/RNAExtractionHelper'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include RNAExtractionHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: TestRNAExtractionKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = operations.map { |op| sample_volume(op) }
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        use_operations: true
      )
    end

    operations.store

    {}
  end
end

test:
# test

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operation_type: Prepare Master Mix
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [Master Mix], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: input, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Primer Mix Aliquot], array: true, routing: M}
  - {ftype: json, role: input, name: Options}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Microtiter Plates/PlateLayoutGenerator'
needs 'PCR Libs/PCRComposition'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Protocol for setting up a master mix plate for RT-qPCR
# @note Instructions adapted from the CDC COVID-19 detection protocol
#   https://www.fda.gov/media/134922/download
#
# 1) In the reagent set-up room clean hood, place rRT-PCR buffer, enzyme,
#     and primer/probes on ice or cold-block. Keep cold during preparation
#     and use.
#
# 2) Mix buffer, enzyme, and primer/probes by inversion 5 times.
#
# 3) Centrifuge reagents and primers/probes for 5 seconds to collect
#     contents at the bottom of the tube, and then place the tube in
#     a cold rack.
#
# 4) Label one 1.5 mL microcentrifuge tube for each primer/probe set.
#
# 5) Determine the number of reactions (N) to set up per assay.
#   It is necessary to make excess reaction mix for the NTC, nCoVPC,
#   HSC (if included in the RT-PCR run), and RP reactions and for pipetting
#   error. Use the following guide to determine N:
#     - If number of samples (n) including controls equals 1 through 14,
#       then N = n + 1
#     - If number of samples (n) including controls is 15 or greater,
#       then N = n + 2
#
# 7) For each primer/probe set, calculate the amount of each reagent
#   to be added for each reaction mixture (N = # of reactions).
#
# 8) Dispense reagents into each respective labeled 1.5 mL microcentrifuge
#   tube. After addition of the reagents, mix reaction mixtures by
#   pipetting up and down. Do not vortex.
#
# 9) Centrifuge for 5 seconds to collect contents at the bottom of
#   the tube, and then place the tube in a cold rack.
#
# 10) Set up reaction strip tubes or plates in a 96-well cooler rack.
#
# 11) Dispense 15 uL of each master mix into the appropriate wells going
#   across the row
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  # Standard Libs
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay

  # Diagnostic RT-qPCR
  include DataAssociationKeys

  WATER = 'Molecular Grade Water'
  RNA_FREE_WORKSPACE = 'reagent set-up room'
  PLATE = 'PCR Plate'
  PRIMER_MIX = 'Primer/Probe Mix'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      number_of_reactions: 24,
      group_size: 3,
      program_name: 'CDC_TaqPath_CG'
    }
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    provision_plates(
      operations: operations,
      object_type: '96-well qPCR Plate'
    )

    prepare_materials(operations: operations)

    prepare_master_mixes(operations: operations)

    operations.store

    {}
  end

  # @todo make this responsive to the designated object_type for the operation
  def provision_plates(operations:, object_type:)
    operations.each do |op|
      collection = make_new_plate(object_type, label_plate: true)
      op.output(PLATE).set collection: collection
      inspect op.output(PLATE).collection.matrix if debug
    end
  end

  # Prepare workspace and materials
  #
  # @todo Make this handle master mix or enzyme with separate buffer dynamically
  # @param operations [OperationList]
  def prepare_materials(operations:)
    prepare_workspace
    operations.retrieve
    mix_and_spin_down_reagents
  end

  def prepare_master_mixes(operations:)
    operations.each { |op| prepare_master_mix(operation: op) }
  end

  def prepare_master_mix(operation:)
    primer_mixes = operation.input_array(PRIMER_MIX).map(&:item)
    output_collection = operation.output(PLATE).collection

    label_master_mix_tubes(labels: primer_mixes.map { |item| item.sample.name })

    group_size = operation.temporary[:options][:group_size]
    program_name = operation.temporary[:options][:program_name]
    composition = PCRCompositionFactory.build(
      program_name: program_name
    )

    output_collection.associate(COMPOSITION_NAME_KEY, program_name)
    output_collection.associate(GROUP_SIZE_KEY, group_size)

    pipet_master_mix_components(
      primer_mixes: primer_mixes,
      composition: composition,
      sample_number: sample_number_with_excess(sample_number: group_size)
    )

    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: group_size,
      method: :primer_layout
    )
    primer_mixes.each do |primer_mix|
      pipet_master_mix(
        primer_mix: primer_mix,
        volume: composition.sum_added_components,
        layout_group: layout_generator.next_group,
        collection: output_collection
      )
    end

    # test_layout_generator(layout_generator) if debug
  end

  def sample_number_with_excess(sample_number:)
    sample_number < 15 ? sample_number + 1 : sample_number + 2
  end

  ########## SHOW METHODS ##########

  def prepare_workspace
    show do
      title 'Prepare workspace'

      note "All tasks in this protocol occur in the #{RNA_FREE_WORKSPACE}."
      note 'As you retrieve reagents, place them on ice or in a cold-block.'
    end
  end

  def mix_and_spin_down_reagents
    show do
      title 'Mix and spin down reagents'

      note 'Mix buffer, enzyme, and primer/probes by inversion 5 times.'
      note 'Centrifuge reagents and primers/probes for 5 seconds to collect' \
        'contents at the bottom of the tube.'
      note 'Place the tubes on ice or in a cold-block.'
    end
  end

  def label_master_mix_tubes(labels:)
    n = labels.length
    labels = labels.map { |label| "<b>#{label}</b>" }
    show do
      title 'Label master mix tubes'

      note "Take out #{n} #{TUBE_MICROFUGE.pluralize(n)}"
      note "Write #{labels.to_sentence} on the tops of each tube"
    end
  end

  def pipet_master_mix_components(primer_mixes:, composition:, sample_number:)
    show do
      title 'Pipet master mix components'

      note 'Pipet the following components into each labeled master mix tube'
      table master_mix_table(
        composition: composition,
        sample_number: sample_number
      )
      separator

      note 'Pipet the primer/probe mixes into each corresponding' \
        ' master mix tube'
      table primer_probe_table(
        primer_mixes: primer_mixes,
        composition: composition,
        sample_number: sample_number
      )
    end
  end

  # Build table for volumes of master mix components
  #
  # @param composition [PCRComposition]
  # @param sample_number [Fixnum]
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def master_mix_table(composition:, sample_number:)
    header = [
      'Component',
      composition.master_mix.display_name,
      composition.water.display_name
    ]
    row = [
      "Volume (#{MICROLITERS})",
      composition.master_mix.add_in_table(sample_number),
      composition.water.add_in_table(sample_number)
    ]
    [header, row].transpose
  end

  # Build table for volumes of master mix components
  #
  # @param composition [PCRComposition]
  # @param sample_number [Fixnum]
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def primer_probe_table(primer_mixes:, composition:, sample_number:)
    table = [[
      composition.primer_probe_mix.display_name,
      'Item',
      "Volume (#{MICROLITERS})"
    ]]
    primer_mixes.each do |primer_mix|
      row = [
        primer_mix.sample.name,
        primer_mix.to_s,
        composition.primer_probe_mix.add_in_table(sample_number)
      ]
      table.append(row)
    end
    table
  end

  def pipet_master_mix(primer_mix:, volume:, layout_group:, collection:)
    show do
      title "Pipet #{primer_mix.sample.name} master mix into plate"

      note "Pipet #{volume} #{MICROLITERS} of #{primer_mix.sample.name}" \
        " master mix into the plate #{collection}"
      table highlight_collection_rc(collection, layout_group, check: false)
    end
  end

  ########## TEST METHODS ##########

  # @todo this doesn't work because next_group is destructive
  def test_layout_generator(layout_generator)
    3.times do |i|
      inspect layout_generator.next_group.to_s, "Layout group #{i + 1}"
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)

  #   mm = Sample.find_by_name('TaqPath 1-Step RT-qPCR Master Mix')
  #   p1 = Sample.find_by_name('2019-nCoV_N1')
  #   p2 = Sample.find_by_name('2019-nCoV_N2')
  #   p3 = Sample.find_by_name('RNase P')

  #   add_operation
  #     .with_property("Options", '{ "magic_number": 24, "foo": "baz" }')
  #     .with_input('Enzyme Master Mix', mm)
  #     .with_input('Primer/Probe Mix', p1)
  #     .with_input('Primer/Probe Mix', p2)
  #     .with_input('Primer/Probe Mix', p3)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: qPCR Reaction, description: qPCR Reaction}
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object_types:
  - {name: Eluted Swab, description: A Respiratory Specimen that has been rehydrated with reydration buffer, handler: sample_container, unit: Respiratory Specimen, release_method: return, sample_type_name: Respiratory Specimen}
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operation_type: Prepare RT-qPCR Plate
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [RNA, Respiratory Specimen], object_types: [Purified RNA in 1.5 mL tube, Eluted Swab], array: true, routing: T}
  - {ftype: json, role: input, name: Options}
  - {ftype: sample, role: input, name: PCR Plate, sample_types: [Master Mix], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: string, role: input, name: Assay Type, choices: Modified_CDC,Standard_CDC}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRDebug'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'
needs 'PCR Libs/PCRComposition'
needs 'Microtiter Plates/MicrotiterPlate'
needs 'Collection Management/CollectionTransfer'

# Protocol for setting up a plate with extracted RNA samples
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
class Protocol
  include DiagnosticRTqPCRHelper
  include DiagnosticRTqPCRDebug
  include MicrotiterPlates
  include CollectionTransfer
  include DataAssociationKeys

  

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      max_inputs: 24,
      method: 'cdc_sample_layout'.to_sym
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      negative_template_control: nil,
      negative_template_location: nil,
      positive_template_control: 'Test nCoVPC',
      positive_template_location: [0, 11]
    }
  end

  def main
    #========= Setup Job ==========#
    setup_test(operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )

    #========= Validation =========#
    validate(operations: operations)
    return {} if operations.errored.any?

    #====== General Warnings =====#
    rnase_warning
    safety_warning

    operations.retrieve.make

    #====== Core Operation ======#
    operations.each do |op|
      op.pass(PLATE)
      output_collection = op.output(PLATE).collection
      group_size = output_collection.get(:group_size)
      program_name = output_collection.get(:program_name)

      microtiter_plate = MicrotiterPlateFactory.build(
        collection: output_collection,
        group_size: group_size,
        method: op.temporary[:options][:method]
      )

      composition = PCRCompositionFactory.build(
        program_name: program_name
      )
      volume = { qty: composition.template.qty,
                 units: composition.template.units }

      remaining_inputs = add_control_samples(
        operation_inputs: op.input_array(TEMPLATE),
        microtiter_plate: microtiter_plate,
        volume: volume,
        operation_parameters: op.temporary[:options]
      )

      add_diagnostic_samples(
        operation_inputs: remaining_inputs,
        microtiter_plate: microtiter_plate,
        volume: volume
      )

      seal_plate(output_collection)
      show_result(collection: output_collection) if debug
    end

    operations.store

    {}
  end

  # Provides instructions and handling for addition of control
  # samples.  Returns all inputs that are NOT control inputs
  #
  # @param operation_inputs [Array<item>]
  # @param collection [Collection]
  # @param layout_generator [LayoutGenerator]
  # @param volume [{aty: int, unit: string}]
  # @return operation_inputs [Array<item>]
  def add_control_samples(operation_inputs:, microtiter_plate:,
                          volume:, operation_parameters:)
    %w[negative_template positive_template].each do |stub|
      name = operation_parameters["#{stub}_control".to_sym]
      loc = operation_parameters["#{stub}_location".to_sym]

      next unless name.present? && loc.present?

      control_inputs, operation_inputs = operation_inputs.partition do |fv|
        fv.sample.name == name
      end

      add_samples(
        operation_inputs: control_inputs,
        microtiter_plate: microtiter_plate,
        volume: volume,
        column: loc[1]
      )

      # negative control samples need to be covered after addition
      next unless stub.include?('negative')

      seal_plate(collection, rc_list: get_rna_samples(collection))
    end
    operation_inputs
  end

  # Provides instructions to add diagnostic samples to collection
  #
  # @param operation_inputs [Array<items>]
  # @param collection [Collection]
  # @param layout_generator [LayoutGenerator]
  # @param volume [{aty: int, unit: string}]
  def add_diagnostic_samples(operation_inputs:, microtiter_plate:,
                            volume:)
    add_samples(
      operation_inputs: operation_inputs,
      microtiter_plate: microtiter_plate,
      volume: volume
    )
  end

  # validates operations and ensures that they are formatted as expected
  #
  # @param operations [OperationList]
  def validate(operations:)
    operations.each do |op|
      if op.input_array(TEMPLATE).length > @job_params[:max_inputs]
        raise IncompatibleInputsError, "Too many inputs for Operation #{op.id}"
      end
    end
  rescue IncompatibleInputsError => e
    error_operations(operations: operations, err: e)
  end

  # Say you're quitting due to an error and error all the operations
  #
  def error_operations(operations:, err:)
    show do
      title 'Incompatible Inputs Detected'
      warning err.message
    end

    operations.each { |op| op.error(:incompatible_inputs, err.message) }
  end

  class IncompatibleInputsError < ProtocolError; end
  class NoAvailableWells < ProtocolError; end
end

test:
class ProtocolTest < ProtocolTestBase
    def setup
      add_random_operations(1)
    end
  
    def analyze
      log('Hello from Nemo')
      assert_equal(@backtrace.last[:operation], 'complete')
    end
  end

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operation_type: Run qPCR
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: json, role: input, name: Options}
  - {ftype: sample, role: output, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
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protocol:
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'
needs 'PCR Libs/PCRProgram'
needs 'Thermocyclers/Thermocyclers'
needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Debug'

# Protocol for loading samples into a qPCR thermocycler and running it
#
# @author Devin Strickland <strcklnd@uw.edu>
# @todo Decide whether this is actually qPCR specific
class Protocol
  include ThermocyclerHelper
  include PlanParams
  include Debug

  INPUT_REACTIONS = 'qPCR Reactions'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      thermocycler_model: TestThermocycler::MODEL,
      program_name: 'CDC_TaqPath_CG',
      qpcr: true
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug

    @job_params = update_job_params(
      operations: operations,
      default_job_params: default_job_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    composition = PCRCompositionFactory.build(
      program_name: @job_params[:program_name]
    )
    program = PCRProgramFactory.build(
      program_name: @job_params[:program_name],
      volume: composition.volume
    )
    thermocycler = ThermocyclerFactory.build(
      model: @job_params[:thermocycler_model]
    )

    set_up_program(
      thermocycler: thermocycler,
      program: program,
      composition: composition,
      qpcr: @job_params[:qpcr]
    )

    load_plate_and_start_run(
      thermocycler: thermocycler,
      items: operations.map { |op| op.input(INPUT_REACTIONS).item },
      experiment_filename: experiment_filename
    )

    export_measurements(thermocycler: thermocycler)

    operations.store

    {}
  end

  ########## NAMING METHODS ##########

  # Constructs a name for the experiment file.
  #
  # @return [String]
  def experiment_filename
    date = DateTime.now.strftime('%Y-%m-%d')
    "#{date}_Job_#{job.id}"
  end

  # Gets the currently active `Job`
  #
  # @return [Job]
  def job
    operation_ids = operations.map(&:id)
    ja_ids = JobAssociation.where(operation_id: operation_ids).map(&:job_id).uniq
    jobs = Job.find(ja_ids).select(&:active?)
    raise ProtocolError, 'Cannot resolve the current Job' if jobs.length > 1

    jobs.last
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
    # [1..3].each do |i|
    #   s = Sample.find_by_name("Test qPCR Reaction #{i}")
    #   add_operation
    #     .with_input('qPCR Reactions', s)
    #     .with_property('Options', '{"thermocycler_model": "BioRad CFX96", "program_name": "CDC_qScript_XLT_ToughMix"}')
    #     .with_output('qPCR Reactions', s)
    # end
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

library: {name: DataAssociationKeys, category: Diagnostic RT-qPCR}
code_source:
module DataAssociationKeys
  GROUP_SIZE_KEY = 'group_size'
  COMPOSITION_NAME_KEY = 'composition_name'
  TEMPLATE_KEY = 'template'
end

library: {name: DiagnosticRTqPCRDebug, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true
needs 'Collection Management/CollectionTransfer'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

module DiagnosticRTqPCRDebug
  include CollectionTransfer
  include DiagnosticRTqPCRHelper
  include DataAssociationKeys

  VERBOSE = false

  def debug_parameters
    {
      group_size: 3,
      program_name: 'CDC_TaqPath_CG',
      debug_primer: [5, 8, 9], # rp, n1, n2,
      debug_template: 'template',
      debug_items: [257,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256,
                    256]
    }
  end

  def setup_test(operations)
    operations.each do |op|
      setup_test_plate(collection: op.input('PCR Plate').collection)
      op.set_input('Template', generate_samples(debug_parameters[:debug_items]))
    end
  end

  # Populate test plate with qPCR Reactions and one no template control (NTC)
  #
  def setup_test_plate(collection:)
    verbose = false
    key = TEMPLATE_KEY
    collection.associate(:program_name, debug_parameters[:program_name])
    collection.associate(:group_size, debug_parameters[:group_size])
    qpcr_reaction = Sample.find_by_name('Test qPCR Reaction')
    ntc_item = Item.find(258)
    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: debug_parameters[:group_size],
      method: :cdc_sample_layout
    )
    i = 0
    loop do
      layout_group = layout_generator.next_group
      break unless layout_group.present?
      layout_group.each do |r, c|
        collection.set(r, c, qpcr_reaction)
        next if i.positive?
        part = collection.part(r, c)
        inspect part, "part at #{[r, c]}" if verbose
        part.associate(key, ntc_item)
        inspect part.associations, "#{key} at #{[r, c]}" if verbose
      end
      i += 1
    end
    show_result(collection: collection) if verbose
    inspect collection.parts.to_s if verbose
  end

  def generate_samples(debug_item_ids)
    debug_items = []
    debug_item_ids.each do |id|
      debug_items.push(Item.find(id))
    end
    debug_items
  end

  def show_result(collection:)
    show do
      table highlight_non_empty(collection)
    end
  end

end



#   def setup_test(operations)
#     operations.each do |op|
#       op.input('PCR Plate').set(collection: generate_debug_container)
#       op.set_input('Template', generate_samples(debug_parameters[:debug_items]))
#     end
#   end

#   # TODO: this is pretty gross and hard coded yuck
#   def generate_debug_container
#     obj_type = ObjectType.find_by_name('96-well qPCR Plate')
#     collection = Collection.new_collection(obj_type)
#     collection.associate(:program_name, debug_parameters[:program_name])
#     collection.associate(:group_size, debug_parameters[:group_size])

#     add_primer_probe(collection)
#     add_neg_control(collection)

#     raise "the associations are #{collection.part(0,0).associations}"
#     collection
#   end

#   def add_primer_probe(collection)
#     debug_parameters[:debug_primer].each_with_index do |sample, idx|
#       sample = Sample.find(sample)
#       12.times do |col|
#         row1 = 0 + idx
#         row2 = 4 + idx
#         collection.set(row1, col, sample)
#         collection.set(row2, col, sample)
#       end
#     end
#   end

#   def add_neg_control(collection)
#     microtiter_plate = MicrotiterPlateFactory.build(
#       collection: collection,
#       group_size: debug_parameters[:group_size],
#       method: :sample_layout
#     )
#     item = Item.find(debug_parameters[:neg_control_sample])
#     neg_group = microtiter_plate.next_empty(key: TEMPLATE_KEY)

#     association_map = []
#     neg_group.each { |r, c| association_map.push({ to_loc: [r, c] }) }
#     transfer_from_item_to_collection(from_item: item,
#                                      to_collection: microtiter_plate.collection,
#                                      association_map: association_map,
#                                      transfer_vol: { qty: 5, units: 'ul'})
#     neg_group.each { |nxt| associate(index: nxt, key: TEMPLATE_KEY, data: item.id) }
#   end

#   def generate_samples(debug_item_ids)
#     debug_items = []
#     debug_item_ids.each do |id|
#       debug_items.push(Item.find(id))
#     end
#     debug_items
#   end
# end

library: {name: DiagnosticRTqPCRHelper, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Collection Management/CollectionTransfer'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Module for elements that are common throughout Diagnostic RT qPCR
#
# @author Devin Strickland <strcklnd@uw.edu>
module DiagnosticRTqPCRHelper
  # Standard Libs
  include Units
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay
  include CollectionTransfer

  #Diagnostic RT-qPCR
  include DataAssociationKeys

  WATER = 'Molecular Grade Water'
  RNA_FREE_WORKSPACE = 'reagent set-up room'
  PLATE = 'PCR Plate'
  PRIMER_MIX = 'Primer/Probe Mix'
  TEMPLATE = 'Template'

  def rnase_warning
    show do
      title 'RNase degrades RNA'
      note 'RNA is prone to degradation by RNase present in our eyes, skin, and breath.'
      note 'Avoid opening tubes outside the Biosafety Cabinet (BSC).'
      bullet 'Change gloves whenever you suspect potential RNAse contamination'
    end
  end

  def safety_warning
    show do
      title 'Review Safety Warnings'
      note '<b>Always</b> pay attention to orange warning blocks throughout the protocol.'
      warning '<b>INFECTIOUS MATERIALS</b>'
      note 'You will be working with infectious materials.'
      note 'Do <b>ALL</b> work in a biosafety cabinet (BSC).'
      note '<b>PPE is required</b>'
      check 'Put on lab coat.'
      check 'Put on 2 layers of gloves.'
      bullet 'Make sure to use tight gloves. Tight gloves reduce the chance of the gloves getting caught on the tubes when closing their lids.'
      bullet 'Change outer layer of gloves after handling infectious sample and before touching surfaces outside of the BSC (such as a refrigerator door handle).'
    end
  end

  # TODO: Think about how to switch this to row-wise addition.
  # Adds samples to to collections, provides instructions to tech
  #
  # @param operation_inputs [Array<items>]
  # @param collection [Collection]
  # @param layout_generator [LayoutGenerator]
  # @param volume [{aty: int, unit: string}]
  # @param column [int]
  def add_samples(operation_inputs:, microtiter_plate:,
                  volume:, column: nil)
    operation_inputs.each do |fv|
      item = fv.item
      layout_group = microtiter_plate.associate_next_empty_group(
        key: TEMPLATE_KEY,
        data: { item: item.id, volume: volume },
        column: column
      )

      association_map = []
      layout_group.each { |r, c| association_map.push({ to_loc: [r, c] }) }
      single_channel_item_to_collection(to_collection: microtiter_plate.collection,
                                        source: item,
                                        volume: volume,
                                        association_map: association_map)
    end
  end

end

library: {name: PrepareRTqPCRValidation, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

module PrepareRTqPCRValidation

  # Validates that all operations are as expected
  #
  # @param operations [OperationList] list of operations
  # @raise rescue will Error any operations that do not pass validation
  def validate(operation:, job_params:)
    valid_op = true

    valid_input, input_error = validate_inputs(operation, job_params)
    valid_contents, content_error = validate_contents(operation, job_params)
    unless valid_input
      valid_op = false
      operation.error(:IncompatibleInputsError, input_error)
      display_error([{ op: operation, error: content_error }])
    end

    unless valid_contents
      valid_op = false
      operation.error(:InvalidContentsError, content_error)
      display_error([{ op: operation, error: content_error }])
    end

    valid_op
  end

  def display_error(error_list)
    error_type = error_list.first[:error]
    tab = [['<b>Operation<b>', '<b>Error Message</b>']]
    error_list.each do |err|
      tab.push([err[:op].id, err[:error]])
    end

    show do
      title 'Operation Error'
      note "The following operations had #{error_type}"
      table tab
    end
  end

  def validate_contents(op, job_params)
    [true, nil]
  end

  def validate_inputs(op, job_params)
    [true, nil]
  end

  class IncompatibleInputsError < ProtocolError; end
  class InvalidContentsError < ProtocolError; end

end

library: {name: PrepareqPCRPlateHelper, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

needs 'PCR Libs/PCRCompositionDefinitions'
needs 'Collection Management/CollectionTransfer'
needs 'Standard Libs/WorkSpace'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Protocol methods for setting up plate withe extracted RNA Samples
#
# @author Devin Strickland <strklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
module PrepareqPCRPlateHelper

  include PCRCompositionDefinitions
  include CollectionTransfer
  include DataAssociationKeys

  attr_reader :template

  OPTIONS = 'options'
  INPUT_PLATE = 'PCR Plate'
  OUTPUT_PLATE = 'PCR Plate'
  ASSAY_TYPE = 'Assay Type'

  def add_inputs(collection:, samples:, volume:, station:)
    return if samples.empty?

    move_to_station(station)
    layout_materials(samples + [collection])

    samples.each do |item|
      association_map = to_association_map(collection: collection,
                                           item: item.sample)
      single_channel_item_to_collection(to_collection: collection,
                                        source: item.id,
                                        volume: volume,
                                        association_map: association_map)
    end
  end

  def update_parameters(operation:,
                        default_operation_params:,
                        default_job_params:)

    determine_default_job_params(operation: operation,
                                 default_job_params: default_job_params)
    opts = operation.plan.associations[:Options]
    default_job_params.update(update_plan_params(plan_params: default_operation_params,
                                                 opts: opts))
  end

  def determine_default_job_params(operation:, default_job_params:)
    input_plate = operation.input(INPUT_PLATE).collection
    default_job_params[:template] = get_composition_def(
      name: input_plate.get(COMPOSITION_NAME_KEY))[:template]
    @template = default_job_params[:template][:input_name]
    group_size = input_plate.get('group_size'.to_sym).to_i
    rows, columns = input_plate.dimensions
    default_job_params[:group_size] = group_size
    default_job_params[:max_inputs] = rows / group_size * columns
  end

  def setup_input_output_collections(input_collection:)
    output_collection = exact_copy(input_collection, label_plates: false)
    association_map = one_to_one_association_map(to_collection: output_collection,
                                                 from_collection: input_collection)

    associate_transfer_collection_to_collection(to_collection: output_collection,
                                                from_collection: input_collection,
                                                association_map: association_map)

    relabel_plate(from_collection: input_collection,
                  to_collection: output_collection)
    output_collection
  end

  def sort_inputs(negative_control:, positive_control:, operation_inputs:)
    remaining_inputs = []
    negative_controls = []
    positive_controls = []
    operation_inputs.each do |input|
      input_name = input.sample.name

      if input_name.include?(negative_control)
        negative_controls.push(input)
      elsif input_name.include?(positive_control)
        positive_controls.push(input)
      else
        remaining_inputs.push(input)
      end
    end
    {negative_control: negative_controls,
     positive_control: positive_controls,
     standard_sample: remaining_inputs}
  end

  def setup_samples(operation_inputs:,
                    collection:,
                    layout_generator:,
                    names_to_avoid: [],
                    column: nil)
    operation_inputs.each do |fv|
      job_params[:max_inputs].times do
        retry_group = true

        layout_group = layout_generator.next_group(column: column)

        layout_group.each do |r, c|
          existing_part = collection.part(r, c)
          raise "Part #{r} , #{c}, #{layout_group}" if existing_part.nil?

          break if avoid_name(existing_part.sample.name, names_to_avoid)

          collection.set(r, c, fv.sample)
          from_obj_to_obj_provenance(collection.part(r, c), existing_part)
          retry_group = false
        end

        column = layout_generator.iterate_column(column)
        break unless retry_group
      end
    end
  end

  def avoid_name(name, names_to_avoid)
    names_to_avoid.each do |avoid_name|
      return true if name.include?(avoid_name)
    end
    false
  end

  def move_to_station(station)
    show do
      title 'Move to Proper Area'
      note "Please move to the <b>#{station}</b> to complete the following steps"
    end
  end

end

library: {name: RNAExtractionHelper, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'
needs 'RNA Extraction Kits/RNAExtractionKits'

# Module for elements that are common to RNA Extraction Protocols
#
# @author Devin Strickland <strcklnd@uw.edu>
module RNAExtractionHelper
  include PlanParams
  include Units
  include Debug
  include RNAExtractionKits

  def sample_volume(operation)
    operation.temporary[:options][:sample_volume]
  end
end
